PsychoPy2experiment version="2021.1.2"
Settings
  Data filename = u'data/%s_%s_%s_%s'%(expInfo['session'],expInfo['participant'],expInfo['age'],expInfo['date'])
  Experiment info = {'session': '', 'participant': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  color = $[1, 1, 1]
  expName = 001
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Routines
  Routine trial
    MouseComponent mouse
      clickable = image_1,image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name
      startVal [time (s)] = 2.0
      timeRelativeTo = routine
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    KeyboardComponent key_resp_1
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        import torch
        import ego
        from ego.stimulation import color
        from ego.stimulation.color import random_gallery, acquisition_gallery, image_create_monochrome, max_gallery, min_gallery, image_create_monochrome_ref

        count_num= 1
        LOOP_NUM = 100
        RANDOM_NUM = 100
        DIM = 2
        N = 2

        bounds = torch.Tensor([[-1.0, -1.0],
                               [1.0, 1.0]])


        path1 = "001.jpg"
        path2 = "002.jpg"
        ref = "ref.jpg"
        acq_name = "EI"

        if expInfo['session']=="1":
            PARAMS_ab = [-0.3, -0.3]
        elif expInfo['session']=="2":
            PARAMS_ab = [-0.3, 0.3]
        elif expInfo['session']=="3":
            PARAMS_ab = [0.3, -0.3]
        elif expInfo['session']=="4":
            PARAMS_ab = [0.3, 0.3]

        image_create_monochrome_ref(ref, r=PARAMS_ab)

        result = []
        response = []
      Begin Routine:
        if count_num <= RANDOM_NUM:
            gallery = random_gallery(n=N, dim=DIM)
        elif count_num > RANDOM_NUM and count_num <= LOOP_NUM:
            gallery = acquisition_gallery(result, response, bounds, acq_name=acq_name)

        image_create_monochrome(path1, gallery[0], result)
        image_create_monochrome(path2, gallery[1], result)
      End Experiment:
        result = torch.Tensor(result).reshape(-1, len(bounds[0]))
        response = torch.Tensor(response).reshape(-1, 2)

        result_save_name = filename + '_result.pt'
        response_save_name = filename + '_response.pt'

        torch.save(result, result_save_name)
        torch.save(response, response_save_name)

        max_galleries = max_gallery(result, response, bounds)
        min_galleries = min_gallery(result, response, bounds)

        max_i_path = filename + '_max.jpg'
        min_i_path = filename + '_min.jpg'

        image_create_monochrome_ref(max_i_path, max_galleries)
        image_create_monochrome_ref(min_i_path, min_galleries)

        max_galleries_name = filename + '_max.pt'
        min_galleries_name = filename + '_min.pt'

        torch.save(max_galleries, max_galleries_name)
        torch.save(min_galleries, min_galleries_name)
      End Routine:
        if key_resp_1.keys==None:
            if mouse.clicked_name[0]=='image_1':
                response.append(len(result)-2)
                response.append(len(result)-1)
            else:
                response.append(len(result)-1)
                response.append(len(result)-2)
        else:
            if key_resp_1.keys=='1':
                response.append(len(result)-2)
                response.append(len(result)-1)
            else:
                response.append(len(result)-1)
                response.append(len(result)-2)

        print(mouse.clicked_name)
        print(response)
        count_num+=1
    ImageComponent image_1
      image [set every repeat] = $path1
      pos = (-400, 0)
      size = (400, 400)
      startVal [time (s)] = 2.0
      texture resolution = 256
      units = pix
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    ImageComponent image_2
      image [set every repeat] = $path2
      pos = (400, 0)
      size = (400, 400)
      startVal [time (s)] = 2.0
      units = pix
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    ImageComponent image_ref
      image [set every repeat] = $ref
      size = (300, 300)
      startVal [time (s)] = 2.0
      texture resolution = 512
      units = pix
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    TextComponent text
      color = black
      letterHeight = 20
      pos = (0, 450)
      startVal [time (s)] = 2.0
      text [set every repeat] = $count_num
      units = pix
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  Routine instruction
    TextComponent text_2
      color = black
      letterHeight = 20
      startVal [time (s)] = 0.0
      text = Press Space key to start
      units = pix
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = $LOOP_NUM
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    Routine trial
  LoopTerminator trials
